PsychoPy2experiment version="2024.2.4"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"'}
  Full-screen window = True
  Monitor = testMonitor
  Save log file = False
  Screen = 1
  Units = height
  Window size (pixels) = [1280, 720]
  colPriority = {'contrast': '30', 'side': '29', 'response': '28', 'eval': '27', 'correct': '26', 'rt': '25', 'score': '24', 'block_type': '23', 'num_trials': '22', 'thisRow.t': '1'}
  consoleLoggingLevel = data
  expName = gratingHA_v11.5
  keyboardBackend = ioHub
  logging level = data
  measureFrameRate = False
  runMode = 0
  sortColumns = priority
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Routines
  Routine block_code
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    CodeComponent code_5
      Code Type = Py
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      Begin Experiment:
        num_blocks=1

        block_conditions=["80:20","20:80"]
        random.shuffle(block_conditions)
        #block_sequence=[block_conditions[i%2] for i in range(num_blocks)]
        block_index=-1
      Begin Routine:
        block_index +=1
        #current_block=block_sequence[block_index]
        current_block=block_conditions[block_index%2]

        num_trials=random.randint(1,2)
        thisExp.addData("num_trials", num_trials)
  Routine full_task
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    CodeComponent code_2
      Code Type = Py
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      Begin Routine:
        contrast = random.choice(contrast_levels)
        #side = random.choices(xside, weights =[0.8, 0.2])[0]  #substituido por left_prob/right_prob

        #if trials_2.thisTrialN==0:     n funciona pq reset no fim do block
            #score=0

        if current_block=="80:20":
            left_prob=0.8
            right_prob=0.2
        else:
            left_prob=0.2
            right_prob=0.8

        side = random.choices(xside, weights =[left_prob, right_prob])[0]

        if side == "Left":
            position_x = -0.5
            correct =  'd'
        elif side == "Right":
            position_x = 0.5
            correct =  'k'
      End Routine:
        if not key_resp_2.keys:
              thisExp.addData("response", "None")
              key_resp_2.corr=0
              eval=2
        else:
             thisExp.addData("response", key_resp_2.keys)
             eval=key_resp_2.corr


        if eval==1:
            score+=1

        thisExp.addData("contrast", contrast)
        thisExp.addData("side", side)
        thisExp.addData("answer", key_resp_2.corr)    #em answer nao resposta=0
        thisExp.addData("eval", eval)               #em eval nao resposta=2 / usar em feedback
        thisExp.addData("score", score)
        thisExp.addData("rt", key_resp_2.rt if key_resp_2.rt else "None")
        thisExp.addData("block_type", f"B_{current_block}")
    GratingComponent grating_2
      contrast [set every repeat] = contrast
      mask = gauss
      ori = 45
      pos [set every repeat] = (position_x, 0)
      saveStartStop = False
      sf = 5
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .5
      tex = sin
      texture resolution = 512
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    KeyboardComponent key_resp_2
      allowedKeys = 'd','k'
      correctAns = $correct
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      store = first key
      storeCorrect = True
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    PolygonComponent polygon_3
      fillColor = white
      lineWidth = 2
      ori = 45
      shape = line
      size = (0.04, 0.04)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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    PolygonComponent polygon_4
      fillColor = white
      lineWidth = 2
      ori = 135
      shape = line
      size = (0.04, 0.04)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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  Routine intro
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    TextComponent text_init
      durationEstim = 5
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        In this task, you will see a visual stimulus appear on the screen

        Your goal is to determine whether the stimulus is on the left side (Press "D") or right side (Press "K")

        Keep your eyes focused on the cross in the center of the screen at all times

        Press ENTER to begin the warm-up session
    KeyboardComponent key_resp_init
      allowedKeys = 'return'
      durationEstim = 5
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine feedback
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    CodeComponent code_3
      Code Type = Py
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      Begin Routine:
        if  eval==1:
            text_feedback="Correct!"
            win.color="green"
            sound_feedback=4000
            volume=1
            duration=1.6

        else:
            text_feedback="Wrong!"
            win.color="red"
            sound_feedback=10000
            volume=1
            duration=2

        #elif  eval==2:
            #text_feedback="No Response"
            #volume=0
            #sound_feedback=None
        win.flip()
      End Routine:
        win.color="none"
        win.flip()
    TextComponent text_3
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = duration
      text [set every repeat] = $text_feedback + "\n\nscore = " + str(score)
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    SoundComponent sound_1
      durationEstim = 1
      saveStartStop = False
      sound [set every repeat] = $sound_feedback
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = duration
      volume [set every repeat] = volume
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  Routine text
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    TextComponent text_2
      durationEstim = 5
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Warm-up complete!

        You are now starting the main task

        Focus on the fixation cross and respond as accurately as possible

        Press ENTER to begin
    KeyboardComponent key_resp_init_2
      allowedKeys = 'return'
      durationEstim = 5
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine Warmup
    RoutineSettingsComponent Warmup
      saveStartStop = False
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    CodeComponent code
      Code Type = Py
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      Before Experiment:
        import random
      Begin Experiment:
        contrast_levels = [1.00, 0.25, 0.12, 0.06, 0.00]
        xside = ["Left", "Right"]
        score=0
        prev=1
      Begin Routine:
        contrast = random.choice(contrast_levels)
        side = random.choice(xside)

        if trials.thisTrialN==0:
            score=0

        if side == "Left":
            position_x = -0.5
            correct =  'd'
        elif side == "Right":
            position_x = 0.5
            correct =  'k'

        if prev==1:
            start=0.2
        else:
            start=0.2+random.uniform(0.2,0.6)
      End Routine:
        if not key_resp.keys:
              thisExp.addData("response", "None")
              key_resp.corr=0
              eval=2
        else:
             thisExp.addData("response", key_resp.keys)
             eval=key_resp.corr


        if eval==1:
            score+=1

        if key_resp.corr==0:
            prev=0
            #wait=2.0
        else:
            prev=1
            #wait=0.5


        thisExp.addData("contrast", contrast)
        thisExp.addData("side", side)

        thisExp.addData("correct", key_resp.corr)    #em answer nao resposta=0
        thisExp.addData("eval", eval)               #em eval nao resposta=2
        thisExp.addData("score", score)
        thisExp.addData("rt", key_resp.rt if key_resp.rt else "None")
        thisExp.addData("block_type","B_50:50")
        thisExp.addData("warmup","warmup")
    GratingComponent grating
      contrast [set every repeat] = contrast
      mask = gauss
      phase = random.random()
      pos [set every repeat] = (position_x, 0)
      saveStartStop = False
      sf = 7
      size = (0.1, 0.1)
      startEstim = 0.5
      startVal [time (s)] = start
      stopVal [duration (s)] = 60
      tex = sin
      texture resolution = 512
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    KeyboardComponent key_resp
      allowedKeys = 'd','k'
      correctAns = $correct
      forceEndRoutine = True
      saveStartStop = False
      startEstim = 0.5
      startVal [time (s)] = start
      stopVal [duration (s)] = 60
      store = first key
      storeCorrect = True
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    PolygonComponent polygon
      durationEstim = 60.2
      fillColor = white
      lineWidth = 2
      ori = 45
      shape = line
      size = (0.04, 0.04)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = start+60
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    PolygonComponent polygon_2
      durationEstim = 60.2
      fillColor = white
      lineWidth = 2
      ori = 135
      shape = line
      size = (0.04, 0.04)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = start+60
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    SoundComponent sound_2
      sound [set every repeat] = 2000
      startEstim = 0.2
      startVal [time (s)] = start
      stopVal [duration (s)] = 0.8
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  Routine B50_50
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    CodeComponent code_6
      Code Type = Py
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      Begin Routine:
        #contrast = random.choice(contrast_levels)
        #side = random.choice(xside)

        if trials_3.thisTrialN==0:   #reseta valores para novo loop
            score=0
            prev=1

        if _side == "left":
            position_x = -0.5
            correct =  'd'
        elif _side == "right":
            position_x = 0.5
            correct =  'k'

        if prev==0:
            start=0.2
        else:
            start=0.2+random.uniform(0.2,0.6)
      End Routine:
        if not key_resp_3.keys:
              thisExp.addData("response", "None")
              key_resp_3.corr=0
              eval=2
        else:
             thisExp.addData("response", key_resp_3.keys)
             eval=key_resp_3.corr

        if eval==1:
            score+=1

        if eval==0:
            prev=0
            #wait=2.0
        else:
            prev=1
            #wait=0.5



        thisExp.addData("contrast", _contrast)
        thisExp.addData("side", _side)
        thisExp.addData("correct", key_resp_3.corr)    #nao resposta=0
        thisExp.addData("eval", eval)               #nao resposta=2
        thisExp.addData("score", score)
        thisExp.addData("rt", key_resp_3.rt if key_resp_3.rt else "None")
        thisExp.addData("block_type",block)
    GratingComponent grating_3
      contrast [set every repeat] = _contrast
      mask = gauss
      phase = random.random()
      pos [set every repeat] = (position_x, 0)
      saveStartStop = False
      sf = 7
      size = (0.1, 0.1)
      startEstim = 0.2
      startVal [time (s)] = start
      stopVal [duration (s)] = 60
      tex = sin
      texture resolution = 512
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    KeyboardComponent key_resp_3
      allowedKeys = 'd','k'
      correctAns = $correct
      forceEndRoutine = True
      saveStartStop = False
      startEstim = 0.2
      startVal [time (s)] = start
      stopVal [duration (s)] = 60
      store = first key
      storeCorrect = True
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    PolygonComponent polygon_5
      durationEstim = 60.2
      fillColor = white
      lineWidth = 2
      ori = 45
      shape = line
      size = (0.04, 0.04)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = start+60
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    PolygonComponent polygon_6
      durationEstim = 60.2
      fillColor = white
      lineWidth = 2
      ori = 135
      shape = line
      size = (0.04, 0.04)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = start+60
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    SoundComponent sound_3
      sound [set every repeat] = 2000
      startEstim = 0.2
      startVal [time (s)] = start
      stopVal [duration (s)] = 0.8
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Flow
  Routine intro
  LoopInitiator trials loopType="TrialHandler"
    loopType = fullRandom
    nReps = 2
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    conditions:
      [{'side': 'Left', 'correct': 'd'},
      {'side': 'Right', 'correct': 'k'},
      {'side': None, 'correct': None}]
    Routine Warmup
    Routine feedback
  LoopTerminator trials
  Routine text
  LoopInitiator trials_2 loopType="TrialHandler"
    conditionsFile = C:/Users/hugof/Downloads/Estágio/Trials/session_trials.csv
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('_side', 'right'), ('_contrast', 0.06), ('block_N', 1), ('block_type', 'B50_50')]),
      OrderedDict([('_side', 'left'), ('_contrast', 0.0), ('block_N', 1), ('block_type', 'B50_50')]),
      OrderedDict([('_side', 'left'), ('_contrast', 0.12), ('block_N', 1), ('block_type', 'B50_50')]),
      OrderedDict([('_side', 'left'), ('_contrast', 1.0), ('block_N', 1), ('block_type', 'B50_50')]),
      OrderedDict([('_side', 'right'), ('_contrast', 0.06), ('block_N', 1), ('block_type', 'B50_50')]),
      OrderedDict([('_side', 'right'), ('_contrast', 1.0), ('block_N', 1), ('block_type', 'B50_50')]),
      OrderedDict([('_side', 'left'), ('_contrast', 1.0), ('block_N', 1), ('block_type', 'B50_50')]),
      OrderedDict([('_side', 'left'), ('_contrast', 0.12), ('block_N', 1), ('block_type', 'B50_50')]),
      OrderedDict([('_side', 'right'), ('_contrast', 0.0), ('block_N', 1), ('block_type', 'B50_50')]),
      OrderedDict([('_side', 'right'), ('_contrast', 0.0), ('block_N', 1), ('block_type', 'B50_50')]),
      OrderedDict([('_side', 'left'), ('_contrast', 0.0), ('block_N', 1), ('block_type', 'B50_50')]),
      OrderedDict([('_side', 'left'), ('_contrast', 0.12), ('block_N', 1), ('block_type', 'B50_50')]),
      OrderedDict([('_side', 'left'), ('_contrast', 0.06), ('block_N', 1), ('block_type', 'B50_50')]),
      OrderedDict([('_side', 'left'), ('_contrast', 0.25), ('block_N', 1), ('block_type', 'B50_50')]),
      OrderedDict([('_side', 'right'), ('_contrast', 0.0), ('block_N', 1), ('block_type', 'B50_50')])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
    Routine B50_50
    Routine feedback
  LoopTerminator trials_2
